PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1.000,-1.000,-1.000]
  expName = PASAT_EN
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Routines
  Routine Instruction_screen
    MouseComponent Click_to_continue
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent Instruction_text
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        You are about to start an experiment in which your working memory, information processing, and coping will be tested.
        In short, the main goal is to add up the last two digits that were mentioned by the computer.

        For example:
        Firstly, you hear number 2. This implies that you have to press the box with number 2 in it.
        Next, you'll hear number 4. This implies that you have to add up these two digits, namely 4 and 2.
        Thus, you'll press the box with number 6.

        If you hear number 8 afterward, you'll add up number 4 (the last digit) and number 8 (the current digit),
        which means that you have to press box number 12.

        If you don't remember it anymore, take a quick break and start with the upcoming number.

        Klick with your mouse to start the experiment
  Routine Determine_stim_presentation_time
    CodeComponent Conditions_and_values
      Code Type = Auto->JS
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      Before Experiment:
        #how many trials must be completed to end a trial block successfully?
        Trial_repeats = 4

        #How long is it possible for a participant to respond per trial?
        pres_duration = 2.4

        #Do you want to enable facial feedbacK? It shows a smiley that  represents you overall performance?
        #It corresponds with specific intervals between perfect and bad.
        #Choose 0 to disable facial feedback and 1 to enable facial feedback
        enable_facial_feedback = 0

        #If the change_pres_duration = 0, then each block has the same reaction time
        #If the change_pres_duration = 1, then each block has a different reaction time.
        #If the change_pres_duration eaquals to 1, it means that it will go faster and faster per block
        change_pres_duration = 1
      Begin Experiment:
        round_number = 0
        time_zero = core.monotonicClock.getTime()
      End Experiment:
        thisExp.addData("globalClockTime", globalClock.getTime())
        thisExp.nextEntry()
      End Routine:
        round_number += 1
        last_stim = 0
        thisExp.addData('round_number', round_number)
  Routine Trial_screen
    CodeComponent Pick_pres_time
      Code Type = Auto->JS
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      Begin Routine:
        #Do not change presentation duration of stimulus
        if change_pres_duration == 0:
            change_pres_duration = pres_duration
        #change Presentation duration of stimulus
        elif change_pres_duration == 1:
            if Block_Loop.thisRepN == 0:
                change_pres_duration = pres_duration #This is a practice block, so it equals to block number 1
            elif Block_Loop.thisRepN == 1:
                change_pres_duration = pres_duration #This is the presentation duration of block number 1
            elif Block_Loop.thisRepN == 2:
                change_pres_duration = pres_duration - 0.4 #This is the presentation duration of block number 2
            elif Block_Loop.thisRepN == 3:
                change_pres_duration = pres_duration - 0.8 #This is the presentation duration of block number 3
            elif Block_Loop.thisRepN == 4:
                change_pres_duration = pres_duration - 1.2 #This is the presentation duration of block number 4
    CodeComponent Register_mouse
      Code Type = Auto->JS
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      End Routine:
        if mouse.clicked_name == ['block_1']:
            reg_resp = 1
        elif mouse.clicked_name == ['block_2']:
            reg_resp = 2
        elif mouse.clicked_name == ['block_3']:
            reg_resp = 3
        elif mouse.clicked_name == ['block_4']:
            reg_resp = 4
        elif mouse.clicked_name == ['block_5']:
            reg_resp = 5
        elif mouse.clicked_name == ['block_6']:
            reg_resp = 6
        elif mouse.clicked_name == ['block_7']:
            reg_resp = 7
        elif mouse.clicked_name == ['block_8']:
            reg_resp = 8
        elif mouse.clicked_name == ['block_9']:
            reg_resp = 9
        elif mouse.clicked_name == ['block_10']:
            reg_resp = 10
        elif mouse.clicked_name == ['block_11']:
            reg_resp = 11
        elif mouse.clicked_name == ['block_12']:
            reg_resp = 12
        elif mouse.clicked_name == ['block_13']:
            reg_resp = 13
        elif mouse.clicked_name == ['block_14']:
            reg_resp = 14
        elif mouse.clicked_name == ['block_15']:
            reg_resp = 15
        elif mouse.clicked_name == ['block_16']:
            reg_resp = 16
        elif mouse.clicked_name == ['block_17']:
            reg_resp = 17
        elif mouse.clicked_name == ['block_18']:
            reg_resp = 18
        elif mouse.clicked_name == [ ]:
            reg_resp = 0

        thisExp.addData('reg_resp', reg_resp)
    CodeComponent Stim_and_sound_values
      Code Type = Both
      Begin Routine:
        import random
        numbers = random.choice(["1.wav", "2.wav","3.wav","4.wav","5.wav","6.wav","7.wav","8.wav","9.wav"])

        if numbers == "1.wav":
            current_stim = 1
        elif numbers == "2.wav":
            current_stim = 2
        elif numbers == "3.wav":
            current_stim = 3
        elif numbers == "4.wav":
            current_stim = 4
        elif numbers == "5.wav":
            current_stim = 5
        elif numbers == "6.wav":
            current_stim = 6
        elif numbers == "7.wav":
            current_stim = 7
        elif numbers == "8.wav":
            current_stim = 8
        elif numbers == "9.wav":
            current_stim = 9
      Each Frame:
        #beëindig routine als pres_tijd voorbij is
        if t >= pres_duration:
            continueRoutine = False
      End Routine:
        thisExp.addData('current_stim', current_stim)
    MouseComponent mouse
      clickable = block_1,block_2,block_3,block_4,block_5,block_6, block_7, block_8,block_9,block_10,block_11,block_12,block_13,block_14,block_15,block_16, block_17, block_18
      durationEstim = 2.4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [time (s)] = pres_duration
      syncScreenRefresh = True
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    CodeComponent Compute_Valid_Response
      Code Type = Auto->JS
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      Begin Experiment:
        last_stim= 0
      Begin Routine:
        valid_stim = current_stim + last_stim
      End Routine:
        thisExp.addData('last_stim', last_stim)
        thisExp.addData('valid_stim', valid_stim)
    PolygonComponent block_1
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.05,0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = pres_duration
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    TextComponent text_1
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.05,0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = pres_duration
      text = 1
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    SoundComponent sound_1
      saveStartStop = False
      sound = 1.wav
      startVal [condition] = current_stim == 1
      stopVal [duration (s)] = 2.4
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    PolygonComponent block_2
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.15,0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = pres_duration
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    TextComponent text_2
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.15,0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 2
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    SoundComponent sound_2
      saveStartStop = False
      sound [set every repeat] = 2.wav
      startVal [condition] = current_stim ==2
      stopVal [duration (s)] = 1.0
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    PolygonComponent block_3
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.232843,0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = pres_duration
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    TextComponent text_3
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.232843,0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 3
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    SoundComponent sound_3
      saveStartStop = False
      sound [set every repeat] = 3.wav
      startVal [condition] = current_stim == 3
      stopVal [duration (s)] = 1.0
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    PolygonComponent block_4
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.29641,0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_4
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.29641,0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 4
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    SoundComponent sound_4
      saveStartStop = False
      sound [set every repeat] = 4.wav
      startVal [condition] = current_stim == 4
      stopVal [duration (s)] = 1.0
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    PolygonComponent block_5
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.35,0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_5
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.35,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 5
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    SoundComponent sound_5
      saveStartStop = False
      sound [set every repeat] = 5.wav
      startVal [condition] = current_stim == 5
      stopVal [duration (s)] = 1.0
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    PolygonComponent block_6
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.29641,-0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_6
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.29641,-0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 6
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    SoundComponent sound_6
      saveStartStop = False
      sound [set every repeat] = 6.wav
      startVal [condition] = current_stim == 6
      stopVal [duration (s)] = 1.0
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    PolygonComponent block_7
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.232843,-0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_7
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.232843,-0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 7
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    SoundComponent sound_7
      saveStartStop = False
      sound [set every repeat] = 7.wav
      startVal [condition] = current_stim == 7
      stopVal [duration (s)] = 1.0
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    PolygonComponent block_8
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.15,-0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_8
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.15,-0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 8
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    SoundComponent sound_8
      saveStartStop = False
      sound [set every repeat] = 8.wav
      startVal [condition] = current_stim == 8
      stopVal [duration (s)] = 1.0
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    PolygonComponent block_9
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.05,-0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_9
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.05,-0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 9
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    SoundComponent sound_9
      saveStartStop = False
      sound [set every repeat] = 9.wav
      startVal [condition] = current_stim == 9
      stopVal [duration (s)] = 1.0
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    PolygonComponent block_10
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.05,-0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_10
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.05,-0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 10
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    PolygonComponent block_11
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.15,-0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_11
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.15,-0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 11
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    PolygonComponent block_12
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.232843,-0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_12
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.232843,-0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 12
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    PolygonComponent block_13
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.29641,-0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_13
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.29641,-0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 13
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    PolygonComponent block_14
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.35,0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_14
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.35,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 14
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    PolygonComponent block_15
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.29641,0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_15
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.29641,0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 15
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    PolygonComponent block_16
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.232843,0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_16
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.232843,0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 16
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    PolygonComponent block_17
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.15,0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_17
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.15,0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 17
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    PolygonComponent block_18
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.05,0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
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    TextComponent text_18
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.05,0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_duration
      text = 18
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  Routine Feedback_screen
    CodeComponent Facial_feedback_scorevalues
      Code Type = Auto->JS
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      Before Experiment:
        #What score is the participant beginning with?
        face_score = 1

        #The values that are important to make the face change

        # If the face_score is above the perfect criterion, the happiest ( :D ) face is shown
        # If the face_score is between the perfect and the good criterion, the happy ( :) ) face is shown
        # If the face_score is between the good and okay criterion, the neutral ( :| ) face is shown
        # If the face_score is between the okay and bad criterion, the sad ( :( ) face is shown
        # If the face_score is below the bad criterion, the angry ( >:( ) face is shown

        perfect = 3
        good = 0
        okay = -3
        bad = -5
      Begin Routine:
        if face_score >= perfect:
            feedback_smiley = 'emotie1.png'
        elif face_score >= good:
            feedback_smiley = 'emotie2.png'
        elif face_score >= okay:
            feedback_smiley = 'emotie3.png'
        elif face_score >= bad:
            feedback_smiley = 'emotie4.png'
        else:
            feedback_smiley = 'emotie5.png'
      Each Frame:
        #if the time last longer than 1 second, continue with next trial
        if t >= 1:
            continueRoutine = False
    CodeComponent Text_Feedback_colours
      Code Type = Py
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      Begin Experiment:
        ansColor = ''
      Begin Routine:
        if reg_resp == valid_stim:
            ansColor = 'green'
            feedback_text = 'right!'
            points = 1
            if Block_Loop.thisN != 0:
                face_score += 1
        else:
            ansColor = 'red'
            feedback_text = 'wrong!'
            points = 0
            if Block_Loop.thisN != 0:
                face_score -= 1
      End Routine:
        last_stim = current_stim
        thisExp.addData('Score', points)
    ImageComponent Feedback_image
      image [set every repeat] = $feedback_smiley
      pos = (0,-0.1)
      size = (0.4, 0.4)
      startVal [condition] = Block_Loop.thisN  != 0 and enable_facial_feedback == 1
      stopVal [duration (s)] = 1.0
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    TextComponent FB_Text_block0
      color [set every repeat] = $ansColor
      letterHeight = 0.1
      saveStartStop = False
      startVal [condition] = Block_Loop.thisN  == 0 or enable_facial_feedback == 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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    TextComponent FB_text_block1234
      color [set every repeat] = $ansColor
      letterHeight = 0.1
      pos = (0, 0.1)
      saveStartStop = False
      startVal [condition] = Block_Loop.thisN  != 0 and enable_facial_feedback == 1
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_text
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    PolygonComponent B_1_FB
      fillColor = $[1,1,1]
      pos = (0.05,0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_1_FB
      color = blue
      letterHeight = 0.05
      pos = (0.05,0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 1
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    PolygonComponent B_2_FB
      fillColor = $[1,1,1]
      pos = (0.15,0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_2_FB
      color = blue
      letterHeight = 0.05
      pos = (0.15,0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 2
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    PolygonComponent B_3_FB
      fillColor = $[1,1,1]
      pos = (0.232843,0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_3_FB
      color = blue
      letterHeight = 0.05
      pos = (0.232843,0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 3
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    PolygonComponent B_4_FB
      fillColor = $[1,1,1]
      pos = (0.29641,0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_4_FB
      color = blue
      letterHeight = 0.05
      pos = (0.29641,0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 4
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    PolygonComponent B_5_FB
      fillColor = $[1,1,1]
      pos = (0.35,0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_5_FB
      color = blue
      letterHeight = 0.05
      pos = (0.35,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 5
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    PolygonComponent B_6_FB
      fillColor = $[1,1,1]
      pos = (0.29641,-0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_6_FB
      color = blue
      letterHeight = 0.05
      pos = (0.29641,-0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 6
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    PolygonComponent B_7_FB
      fillColor = $[1,1,1]
      pos = (0.232843,-0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_7_FB
      color = blue
      letterHeight = 0.05
      pos = (0.232843,-0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 7
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    PolygonComponent B_8_FB
      fillColor = $[1,1,1]
      pos = (0.15,-0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_8_FB
      color = blue
      letterHeight = 0.05
      pos = (0.15,-0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 8
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    PolygonComponent B_9_FB
      fillColor = $[1,1,1]
      pos = (0.05,-0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_9_FB
      color = blue
      letterHeight = 0.05
      pos = (0.05,-0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 9
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    PolygonComponent B_10_FB
      fillColor = $[1,1,1]
      pos = (-0.05,-0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_10_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.05,-0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 10
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    PolygonComponent B_11_FB
      fillColor = $[1,1,1]
      pos = (-0.15,-0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_11_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.15,-0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 11
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    PolygonComponent B_12_FB
      fillColor = $[1,1,1]
      pos = (-0.232843,-0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_12_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.232843,-0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 12
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    PolygonComponent B_13_FB
      fillColor = $[1,1,1]
      pos = (-0.29641,-0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_13_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.29641,-0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 13
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    PolygonComponent B_14_FB
      fillColor = $[1,1,1]
      pos = (-0.35,0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_14_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.35,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 14
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    PolygonComponent B_15_FB
      fillColor = $[1,1,1]
      pos = (-0.29641,0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_15_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.29641,0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 15
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    PolygonComponent B_16_FB
      fillColor = $[1,1,1]
      pos = (-0.232843,0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_16_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.232843,0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 16
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    PolygonComponent B_17_FB
      fillColor = $[1,1,1]
      pos = (-0.15,0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_17_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.15,0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 17
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    PolygonComponent B_18_FB
      fillColor = $[1,1,1]
      pos = (-0.05,0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_18_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.05,0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 18
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  Routine Rest_screen
    TextComponent Rest_text
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        This trial block has ended.
        Klick to continue with the next trial block.
    MouseComponent Rest_click
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Final_screen
    TextComponent Thanks
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thanks for participating!
        Press spacebar to end the experiment.
    KeyboardComponent end_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction_screen
  LoopInitiator Block_Loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine Determine_stim_presentation_time
    LoopInitiator Trial_loop loopType="TrialHandler"
      loopType = random
      nReps = Trial_repeats
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      Routine Trial_screen
      Routine Feedback_screen
    LoopTerminator Trial_loop
    Routine Rest_screen
  LoopTerminator Block_Loop
  Routine Final_screen
