PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1.000,-1.000,-1.000]
  expName = PASAT_NL
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Routines
  Routine Feedback_scherm
    CodeComponent Gezicht_feedback_scorewaarden
      Code Type = Auto->JS
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      Before Experiment:
        #op welke score begint de deelnemer?
        gezicht_score = 1

        #welke waarden zijn van belang bij de scoring?

        # als score perfect is, wordt de beste emotie getoond
        # als de score boven perfect zit, wordt de hele blije smiley getoond
        #als score goed is, wordt blije smiley getoond
        # als score mwa is, wordt het neutrale gezicht getoond
        # als score slecht is, wordt de verdrietige smiley getoond
        #alles slechter dan dat geeft de boze smiley

        perfect = 3
        goed = 0
        mwa = -3
        slecht = -5
      Begin Routine:
        if gezicht_score >= perfect:
            feedback_smiley = 'emotie1.png'
        elif gezicht_score >= goed:
            feedback_smiley = 'emotie2.png'
        elif gezicht_score >= mwa:
            feedback_smiley = 'emotie3.png'
        elif gezicht_score >= slecht:
            feedback_smiley = 'emotie4.png'
        else:
            feedback_smiley = 'emotie5.png'
      Each Frame:
        #als routine langer duurt dan 1 sec, ga door met trials
        if t >= 1:
            continueRoutine = False
    CodeComponent Tekst_Feedback_kleur
      Code Type = Py
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      Begin Experiment:
        kleurAntw = ''
      Begin Routine:
        if geregistreerd_resp == juiste_waarde:
            kleurAntw = 'green'
            feedback_tekst = 'juist'
            punten = 1
            if Blok_Loop.thisN != 0:
                gezicht_score += 1
        else:
            kleurAntw = 'red'
            feedback_tekst = 'onjuist'
            punten = 0
            if Blok_Loop.thisN != 0:
                gezicht_score -= 1
      End Routine:
        laatste_stim = huidige_stim
        thisExp.addData('Score', punten)
    ImageComponent Smiley_plaatje
      image [set every repeat] = $feedback_smiley
      pos = (0,-0.1)
      size = (0.4, 0.4)
      startVal [condition] = Blok_Loop.thisN  != 0 and gezichtsfeedback_aanzetten ==1
      stopVal [duration (s)] = 1.0
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    TextComponent FB_Tekst_B0
      color [set every repeat] = $kleurAntw
      letterHeight = 0.1
      saveStartStop = False
      startVal [condition] = Blok_Loop.thisN  == 0 or gezichtsfeedback_aanzetten ==0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_tekst
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    TextComponent FB_tekst_B1234
      color [set every repeat] = $kleurAntw
      letterHeight = 0.1
      pos = (0, 0.1)
      saveStartStop = False
      startVal [condition] = Blok_Loop.thisN  != 0 and gezichtsfeedback_aanzetten == 1
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_tekst
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    PolygonComponent B_1_FB
      fillColor = $[1,1,1]
      pos = (0.05,0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_1_FB
      color = blue
      letterHeight = 0.05
      pos = (0.05,0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 1
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    PolygonComponent B_2_FB
      fillColor = $[1,1,1]
      pos = (0.15,0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_2_FB
      color = blue
      letterHeight = 0.05
      pos = (0.15,0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 2
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    PolygonComponent B_3_FB
      fillColor = $[1,1,1]
      pos = (0.232843,0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_3_FB
      color = blue
      letterHeight = 0.05
      pos = (0.232843,0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 3
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    PolygonComponent B_4_FB
      fillColor = $[1,1,1]
      pos = (0.29641,0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_4_FB
      color = blue
      letterHeight = 0.05
      pos = (0.29641,0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 4
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    PolygonComponent B_5_FB
      fillColor = $[1,1,1]
      pos = (0.35,0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_5_FB
      color = blue
      letterHeight = 0.05
      pos = (0.35,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 5
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    PolygonComponent B_6_FB
      fillColor = $[1,1,1]
      pos = (0.29641,-0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_6_FB
      color = blue
      letterHeight = 0.05
      pos = (0.29641,-0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 6
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    PolygonComponent B_7_FB
      fillColor = $[1,1,1]
      pos = (0.232843,-0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_7_FB
      color = blue
      letterHeight = 0.05
      pos = (0.232843,-0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 7
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    PolygonComponent B_8_FB
      fillColor = $[1,1,1]
      pos = (0.15,-0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_8_FB
      color = blue
      letterHeight = 0.05
      pos = (0.15,-0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 8
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    PolygonComponent B_9_FB
      fillColor = $[1,1,1]
      pos = (0.05,-0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_9_FB
      color = blue
      letterHeight = 0.05
      pos = (0.05,-0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 9
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    PolygonComponent B_10_FB
      fillColor = $[1,1,1]
      pos = (-0.05,-0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_10_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.05,-0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 10
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    PolygonComponent B_11_FB
      fillColor = $[1,1,1]
      pos = (-0.15,-0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_11_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.15,-0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 11
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    PolygonComponent B_12_FB
      fillColor = $[1,1,1]
      pos = (-0.232843,-0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_12_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.232843,-0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 12
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    PolygonComponent B_13_FB
      fillColor = $[1,1,1]
      pos = (-0.29641,-0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_13_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.29641,-0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 13
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    PolygonComponent B_14_FB
      fillColor = $[1,1,1]
      pos = (-0.35,0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_14_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.35,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 14
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    PolygonComponent B_15_FB
      fillColor = $[1,1,1]
      pos = (-0.29641,0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_15_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.29641,0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 15
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    PolygonComponent B_16_FB
      fillColor = $[1,1,1]
      pos = (-0.232843,0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_16_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.232843,0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 16
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    PolygonComponent B_17_FB
      fillColor = $[1,1,1]
      pos = (-0.15,0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_17_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.15,0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 17
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    PolygonComponent B_18_FB
      fillColor = $[1,1,1]
      pos = (-0.05,0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    TextComponent T_18_FB
      color = blue
      letterHeight = 0.05
      pos = (-0.05,0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = 18
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  Routine Trial_scherm
    CodeComponent Selecteer_pres_tijd
      Code Type = Auto->JS
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      Begin Routine:
        if verander_presentatietijd ==0:
            pres_tijd = duur
        elif verander_presentatietijd ==1:
            if Blok_Loop.thisRepN == 0:
                pres_tijd = duur #oefenblok, dus duur is gelijk aan blok 1
            elif Blok_Loop.thisRepN == 1:
                pres_tijd = duur #blok 1 tijd om te reageren
            elif Blok_Loop.thisRepN == 2:
                pres_tijd = duur - 0.4 #blok 2 tijd om te reageren
            elif Blok_Loop.thisRepN == 3:
                pres_tijd = duur - 0.8 #blok 3 tijd om te reageren
            elif Blok_Loop.thisRepN == 4:
                pres_tijd = duur - 1.2 #blok 4 tijd om te reageren
    CodeComponent Registreer_muisreactie
      Code Type = Auto->JS
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      End Routine:
        if muis.clicked_name == ['blok_1']:
            geregistreerd_resp = 1
        elif muis.clicked_name == ['blok_2']:
            geregistreerd_resp = 2
        elif muis.clicked_name == ['blok_3']:
            geregistreerd_resp = 3
        elif muis.clicked_name == ['blok_4']:
            geregistreerd_resp = 4
        elif muis.clicked_name == ['blok_5']:
            geregistreerd_resp = 5
        elif muis.clicked_name == ['blok_6']:
            geregistreerd_resp = 6
        elif muis.clicked_name == ['blok_7']:
            geregistreerd_resp = 7
        elif muis.clicked_name == ['blok_8']:
            geregistreerd_resp = 8
        elif muis.clicked_name == ['blok_9']:
            geregistreerd_resp = 9
        elif muis.clicked_name == ['blok_10']:
            geregistreerd_resp = 10
        elif muis.clicked_name == ['blok_11']:
            geregistreerd_resp = 11
        elif muis.clicked_name == ['blok_12']:
            geregistreerd_resp = 12
        elif muis.clicked_name == ['blok_13']:
            geregistreerd_resp = 13
        elif muis.clicked_name == ['blok_14']:
            geregistreerd_resp = 14
        elif muis.clicked_name == ['blok_15']:
            geregistreerd_resp = 15
        elif muis.clicked_name == ['blok_16']:
            geregistreerd_resp = 16
        elif muis.clicked_name == ['blok_17']:
            geregistreerd_resp = 17
        elif muis.clicked_name == ['blok_18']:
            geregistreerd_resp = 18
        elif muis.clicked_name == [ ]:
            geregistreerd_resp = 0

        thisExp.addData('geregistreerd_resp', geregistreerd_resp)
    CodeComponent Cijfer_waarden
      Code Type = Py
      Begin Routine:
        import random
        cijfers = random.choice(["1_NL.wav", "2_NL.wav","3_NL.wav","4_NL.wav","5_NL.wav","6_NL.wav","7_NL.wav","8_NL.wav","9_NL.wav"])

        if cijfers == "1_NL.wav":
            huidige_stim = 1
        elif cijfers == "2_NL.wav":
            huidige_stim = 2
        elif cijfers == "3_NL.wav":
            huidige_stim = 3
        elif cijfers == "4_NL.wav":
            huidige_stim = 4
        elif cijfers == "5_NL.wav":
            huidige_stim = 5
        elif cijfers == "6_NL.wav":
            huidige_stim = 6
        elif cijfers == "7_NL.wav":
            huidige_stim = 7
        elif cijfers == "8_NL.wav":
            huidige_stim = 8
        elif cijfers == "9_NL.wav":
            huidige_stim = 9
      Each Frame:
        #beëindig routine als pres_tijd voorbij is
        if t >= pres_tijd:
            continueRoutine = False
      End Routine:
        thisExp.addData('huidige_stim', huidige_stim)
    MouseComponent muis
      clickable = blok_1,blok_2,blok_3,blok_4,blok_5,blok_6, blok_7, blok_8,blok_9,blok_10,blok_11,blok_12,blok_13,blok_14,blok_15,blok_16, blok_17, blok_18
      durationEstim = 2.4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [time (s)] = pres_tijd
      syncScreenRefresh = True
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    CodeComponent Bereken_juiste_resp
      Code Type = Auto->JS
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      Begin Experiment:
        laatste_stim= 0
      Begin Routine:
        juiste_waarde = huidige_stim + laatste_stim
      End Routine:
        thisExp.addData('laatste_stim', laatste_stim)
        thisExp.addData('juiste_waarde', juiste_waarde)
    PolygonComponent blok_1
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.05,0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = pres_tijd
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    TextComponent tekst_1
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.05,0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = pres_tijd
      text = 1
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    SoundComponent geluid_1
      saveStartStop = False
      sound = 1_NL.wav
      startVal [condition] = huidige_stim == 1
      stopVal [duration (s)] = 2.4
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    PolygonComponent blok_2
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.15,0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = pres_tijd
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    TextComponent tekst_2
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.15,0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 2
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    SoundComponent geluid_2
      saveStartStop = False
      sound [set every repeat] = 2_NL.wav
      startVal [condition] = huidige_stim == 2
      stopVal [duration (s)] = 1.0
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    PolygonComponent blok_3
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.232843,0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = pres_tijd
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    TextComponent tekst_3
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.232843,0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 3
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    SoundComponent geluid_3
      saveStartStop = False
      sound [set every repeat] = 3_NL.wav
      startVal [condition] = huidige_stim == 3
      stopVal [duration (s)] = 1.0
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    PolygonComponent blok_4
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.29641,0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_4
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.29641,0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 4
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    SoundComponent geluid_4
      saveStartStop = False
      sound [set every repeat] = 4_NL.wav
      startVal [condition] = huidige_stim == 4
      stopVal [duration (s)] = 1.0
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    PolygonComponent blok_5
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.35,0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_5
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.35,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 5
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    SoundComponent geluid_5
      saveStartStop = False
      sound [set every repeat] = 5_NL.wav
      startVal [condition] = huidige_stim == 5
      stopVal [duration (s)] = 1.0
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    PolygonComponent blok_6
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.29641,-0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_6
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.29641,-0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 6
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    SoundComponent geluid_6
      saveStartStop = False
      sound [set every repeat] = 6_NL.wav
      startVal [condition] = huidige_stim == 6
      stopVal [duration (s)] = 1.0
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    PolygonComponent blok_7
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.232843,-0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_7
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.232843,-0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 7
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    SoundComponent geluid_7
      saveStartStop = False
      sound [set every repeat] = 7_NL.wav
      startVal [condition] = huidige_stim == 7
      stopVal [duration (s)] = 1.0
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    PolygonComponent blok_8
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.15,-0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_8
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.15,-0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 8
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    SoundComponent geluid_8
      saveStartStop = False
      sound [set every repeat] = 8_NL.wav
      startVal [condition] = huidige_stim == 8
      stopVal [duration (s)] = 1.0
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    PolygonComponent blok_9
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (0.05,-0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_9
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (0.05,-0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 9
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    SoundComponent geluid_9
      saveStartStop = False
      sound [set every repeat] = 9_NL.wav
      startVal [condition] = huidige_stim == 9
      stopVal [duration (s)] = 1.0
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    PolygonComponent blok_10
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.05,-0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_10
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.05,-0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 10
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    PolygonComponent blok_11
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.15,-0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_11
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.15,-0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 11
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    PolygonComponent blok_12
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.232843,-0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_12
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.232843,-0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 12
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    PolygonComponent blok_13
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.29641,-0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_13
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.29641,-0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 13
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    PolygonComponent blok_14
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.35,0)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_14
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.35,0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 14
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    PolygonComponent blok_15
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.29641,0.1)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_15
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.29641,0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 15
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    PolygonComponent blok_16
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.232843,0.182843)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_16
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.232843,0.182843)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 16
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    PolygonComponent blok_17
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.15,0.24641)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_17
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.15,0.24641)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 17
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    PolygonComponent blok_18
      durationEstim = 2.4
      fillColor = $[1,1,1]
      pos = (-0.05,0.3)
      saveStartStop = False
      shape = regular polygon...
      size = (0.08, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
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    TextComponent tekst_18
      color = blue
      durationEstim = 2.4
      letterHeight = 0.05
      pos = (-0.05,0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pres_tijd
      text = 18
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  Routine Pauze_scherm
    TextComponent Pauze_Tekst
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text = Het blok is nu voorbij, neem even pauze en klik met de muis om weer door te gaan. 
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    MouseComponent Pauze_klik
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Instructie_scherm
    MouseComponent Klik_voor_doorgaan
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent instructie_tekst
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        U gaat zo een taak doen waarbij u cijfers hoort.
        Het doel is om de 2 meest recente cijfers bij elkaar op te tellen.

        Een voorbeeld:
        U hoort eerst een 2, vervolgens een 4. Dan klikt u op de 6.
        Vervolgens hoort u een 8. Dit houdt in dat u de 4 en de 8 bij elkaar optelt.
        Dit betekent dus dat u 12 moet aanklikken.

        Mocht u het even kwijt zijn, stop dan met tellen en pak de draad weer op vanaf het volgende nummer.

        Klik met de computermuis om te starten.
  Routine Bepaal_tijden_voor_stimuluspresentatie
    CodeComponent Condities_en_waarden
      Code Type = Auto->JS
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      Before Experiment:
        Trial_herhalingen = 4 #hoe lang wil je 1 Trialblok laten duren

        #Hoelang kan de respondent reageren op een stimulus, pas aan met duur in seconden
        duur = 2.4

        #Wil je gezichten als feedback hebben of niet (0 is niet, 1 is wel)
        gezichtsfeedback_aanzetten = 0

        #Als verander_presentatietijd = 0, dan heeft elk blok dezelfde presentatietijd
        #Als verander_presentatietijd = 1, dan verandert de presentatietijd van de stimulus elk blok
        verander_presentatietijd = 1
      Begin Experiment:
        ronde_nummer = 0
        time_zero = core.monotonicClock.getTime()
      End Experiment:
        thisExp.addData("globalClockTime", globalClock.getTime())
        thisExp.nextEntry()
      End Routine:
        ronde_nummer += 1
        laatste_stim = 0
        thisExp.addData('ronde', ronde_nummer)
  Routine Eind_scherm
    TextComponent Bedankt
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Dank voor uw deelname aan het onderzoek!
        U mag de onderzoeker informeren dat u klaar bent.
    KeyboardComponent beëindig_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine Instructie_scherm
  LoopInitiator Blok_Loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine Bepaal_tijden_voor_stimuluspresentatie
    LoopInitiator Trial_loop loopType="TrialHandler"
      loopType = random
      nReps = Trial_herhalingen
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      Routine Trial_scherm
      Routine Feedback_scherm
    LoopTerminator Trial_loop
    Routine Pauze_scherm
  LoopTerminator Blok_Loop
  Routine Eind_scherm
